PsychoPy2experiment version="3.2.3"
Settings
  Data filename = 'data/%s_%s_%s' %(expInfo['participant'], expName, expInfo['date'])
  Experiment info = {'session': '001', 'participant': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = use prefs
  Window size (pixels) = [1680, 1050]
  expName = LexicalDecisionTask
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Routines
  Routine trial
    StaticComponent ISI
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    TextComponent TargetText
      letterHeight = 0.1
      startVal [time (s)] = 0.25
      text [set every repeat] = $word
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    KeyboardComponent key_resp_2
      allowedKeys = 'f','j'
      forceEndRoutine = True
      startVal [time (s)] = 0.25
      storeCorrect = True
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    TextComponent fixation
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .25
      text = +
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  Routine instr2
    TextComponent text_2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text [set every repeat] = $introtext
      wrapWidth = 50
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    KeyboardComponent key_resp_3
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine breaktime
    TextComponent text_3
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        You may now take a moment to stretch.

        Press a button when you are ready to continue.
    KeyboardComponent breaktimeEnder
      forceEndRoutine = True
      startVal [time (s)] = 0.5
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  Routine farewell
    TextComponent textBye
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      text = You have completed this part of the experiment.
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  Routine instr1
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        In this task, your job is to identify whether the text displayed on the screen is a word or a nonword.

        Press a button to continue.
    KeyboardComponent key_resp_4
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent setMapping
      Code Type = Py
      Begin Experiment:
        if random() > 0.5:
            expInfo['respMapping'] = 'wordleft'
            wordResp = 'f'
            nonwordResp = 'j'
        else:
            expInfo['respMapping'] = 'wordright'
            wordResp = 'j'
            nonwordResp = 'f'

        thisExp.addData("respMapping", expInfo['respMapping'])

        introtext = "If the text is a real word, press the %s key.\n\nIf the text is not a real word, press the %s key.\n\nPress a key to begin." %(wordResp, nonwordResp)
Flow
  Routine instr1
  Routine instr2
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = Bartholow_Heinz_2006.xlsx
    loopType = random
    nReps = 7
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    conditions:
      [{'targetWord': 'Glide', 'valence': 'neutral'},
      {'targetWord': 'Suggest', 'valence': 'neutral'},
      {'targetWord': 'Observe', 'valence': 'neutral'},
      {'targetWord': 'Vanish', 'valence': 'neutral'},
      {'targetWord': 'Move', 'valence': 'neutral'},
      {'targetWord': 'Narrate', 'valence': 'neutral'},
      {'targetWord': 'Imagine', 'valence': 'neutral'},
      {'targetWord': 'Ignored', 'valence': 'neutral'},
      {'targetWord': 'Improve', 'valence': 'neutral'},
      {'targetWord': 'Joked', 'valence': 'neutral'},
      {'targetWord': 'Read', 'valence': 'neutral'},
      {'targetWord': 'Leave', 'valence': 'neutral'},
      {'targetWord': 'Listen', 'valence': 'neutral'},
      {'targetWord': 'Transfer', 'valence': 'neutral'},
      {'targetWord': 'Reported', 'valence': 'neutral'},
      {'targetWord': 'Punch', 'valence': 'aggressive'},
      {'targetWord': 'Assault', 'valence': 'aggressive'},
      {'targetWord': 'Murder', 'valence': 'aggressive'},
      {'targetWord': 'Torture', 'valence': 'aggressive'},
      {'targetWord': 'Hurt', 'valence': 'aggressive'},
      {'targetWord': 'Wound', 'valence': 'aggressive'},
      {'targetWord': 'Fight', 'valence': 'aggressive'},
      {'targetWord': 'Shatter', 'valence': 'aggressive'},
      {'targetWord': 'Stab', 'valence': 'aggressive'},
      {'targetWord': 'Kill', 'valence': 'aggressive'},
      {'targetWord': 'Brutalize', 'valence': 'aggressive'},
      {'targetWord': 'Strike', 'valence': 'aggressive'},
      {'targetWord': 'Molest', 'valence': 'aggressive'},
      {'targetWord': 'Slaughter', 'valence': 'aggressive'},
      {'targetWord': 'Hit', 'valence': 'aggressive'},
      {'targetWord': 'Sarf', 'valence': 'nonword'}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
    Routine trial
  LoopTerminator trials
  Routine farewell
